PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = word_priming_vaishnavi
  keyboardBackend = Pyglet
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_words
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar" 
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_words
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to submit 
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/vaishnavipatel/Downloads/test_words - Sheet1.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('test', '_a_e')]),
      OrderedDict([('test', 't_g_r')]),
      OrderedDict([('test', '_oo_')]),
      OrderedDict([('test', 'c_s_h_o_n')]),
      OrderedDict([('test', '_ia_n_')])]
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = /Users/vaishnavipatel/Downloads/test_words - Sheet1.csv
      loopType = random
      nReps = 5
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      conditions:
        [OrderedDict([('test', '_a_e')]),
        OrderedDict([('test', 't_g_r')]),
        OrderedDict([('test', '_oo_')]),
        OrderedDict([('test', 'c_s_h_o_n')]),
        OrderedDict([('test', '_ia_n_')])]
      Routine test
      Routine trial
    LoopTerminator trials_2
  LoopTerminator trials
